CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\\load_data_csv\\Plate2_PCO_6ch_9site_20XPA
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

FlagImage:[module_num:2|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

Resize:[module_num:3|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enabled:False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
    Select the input image:IllumDNA
    Name the output image:ResizeIllumDNA
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigDNA
    Additional image count:3
    Select the additional image?:IllumAGP
    Name the output image:ResizeIllumAGP
    Select the additional image?:IllumER
    Name the output image:ResizeIllumER
    Select the additional image?:IllumMito
    Name the output image:ResizeIllumMito

CorrectIlluminationApply:[module_num:4|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enabled:False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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:ResizeIllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:ResizeIllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:ResizeIllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:ResizeIllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigGolgi
    Name the output image:Golgi
    Select the illumination function:IllumGolgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:Actin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:6|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:7|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:8|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../qc
    Rules file name:is_blurry_rules.txt
    Class number:2
    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:9|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notes:['60, 100']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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Resize:[module_num:11|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
    Select the input image:CorrBlue
    Name the output image:ResizedCorrBlue
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:1
    Select the additional image?:RNA
    Name the output image:ResizedRNA

Resize:[module_num:12|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enabled:False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
    Select the input image:CorrBlue
    Name the output image:ResizedCorrBlue
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:1
    Select the additional image?:RNA
    Name the output image:ResizedRNA

IdentifyPrimaryObjects:[module_num:13|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notes:['Problem now: detects some nuclei together', 'local maxima from 15 to 10 or 12?', '', '433']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enabled:False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
    Select the input image:CorrBlue
    Name the primary objects to be identified:NucleiOrig
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:25
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,0.004
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:14|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notes:['currently with the upper/lower thresh, some cells are not picked (very dim) or the boundaries of some of the cells are not separated correctly, ', 'need to check overall and decide whthere to make it more strict or loose']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
    Select the input image:ResizedCorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:12
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0004,0.004
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:15|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notes:['maybe RNA+ER?  when no RNA, using AGP or ER?  Probably AGP, but whatever works!  AGP is better (shows cleaner cell edge)', '', 'for BR00117062a--> maybe the upper thresh from 0.035 to 0.031', '', '0.001 to 0.003 --> 0.0 to 0.002']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ResizedRNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,0.0019
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ResizeObjects:[module_num:17|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
    Select the input object:Nuclei
    Name the output object:ResizedBackNuclei
    Method:Factor
    Factor:4
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
ResizeObjects:[module_num:18|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
    Select the input object:Cells
    Name the output object:ResizedBackCell
    Method:Factor
    Factor:4
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
RescaleIntensity:[module_num:19|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
    Select the input image:DNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:20|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
    Select the input image:RNA
    Name the output image:RescaleRNA
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:21|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleDNA
    Select the image to be colored green:RescaleRNA
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:ResizedBackNuclei
    Select outline color:yellow
    Select objects to display:ResizedBackCell

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:25|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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