CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\\load_data_csv\\Plate3_PCO_6ch_4site_10XPA_Crestz
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

FlagImage:[module_num:2|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigGolgi
    Name the output image:Golgi
    Select the illumination function:IllumGolgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:Actin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:4|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:5|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notes:['Mesure the channels in Segmentation']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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:6|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../qc
    Rules file name:is_blurry_rules.txt
    Class number:2
    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:7|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notes:['60, 100']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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Resize:[module_num:9|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
    Select the input image:CorrBlue
    Name the output image:ResizedCorrBlue
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:1
    Select the additional image?:RNA
    Name the output image:ResizedRNA

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:ResizedCorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:6
    Suppress local maxima that are closer than this minimum allowed distance:6
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0005,0.0015
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ResizedRNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,0.0015
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ResizeObjects:[module_num:13|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
    Select the input object:Nuclei
    Name the output object:ResizedBackNuclei
    Method:Factor
    Factor:4
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
ResizeObjects:[module_num:14|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
    Select the input object:Cells
    Name the output object:ResizedBackCell
    Method:Factor
    Factor:4
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
ResizeObjects:[module_num:15|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
    Select the input object:Cytoplasm
    Name the output object:ResizedBackCytoplasm
    Method:Factor
    Factor:4
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
MeasureColocalization:[module_num:16|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
    Select images to measure:Actin, DNA, ER, Golgi, Mito, RNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:ResizedBackCell, ResizedBackCytoplasm, ResizedBackNuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:17|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
    Select images to measure:Actin, DNA, ER, Golgi, Mito, RNA
    Measure within objects?:Yes
    Select objects to measure:ResizedBackCell, ResizedBackCytoplasm, ResizedBackNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:Actin, DNA, ER, Golgi, Mito, RNA
    Select objects to measure:ResizedBackCell, ResizedBackCytoplasm, ResizedBackNuclei

MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:ResizedBackCell
    Select neighboring objects to measure:ResizedBackCell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:ResizedBackNuclei
    Select neighboring objects to measure:ResizedBackNuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:ResizedBackCell
    Select neighboring objects to measure:ResizedBackCell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:22|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
    Select images to measure:Actin, DNA, ER, Golgi, Mito, RNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:ResizedBackNuclei
    Object to use as center?:These objects
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    Select objects to measure:ResizedBackCytoplasm
    Object to use as center?:These objects
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    Select objects to measure:ResizedBackCell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:23|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enabled:False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
    Select object sets to measure:ResizedBackNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:24|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enabled:False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
    Select object sets to measure:ResizedBackCell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:25|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enabled:False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
    Select object sets to measure:ResizedBackCytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:26|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
    Select images to measure:Actin, DNA, ER, Golgi, Mito, RNA
    Select objects to measure:ResizedBackCell, ResizedBackCytoplasm, ResizedBackNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:ResizedBackNuclei

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:ResizedBackCell

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:32|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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