CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:40
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Desktop/2020_11_16_Scope1_PE/CPBroadPhenixNC1PlaneP1
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

FlagImage:[module_num:2|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:PreDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:PreER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigWGPhalloidin
    Name the output image:PreWGPhalloidin
    Select the illumination function:IllumWGPhalloidin
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:PreMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:PreRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:DNA
    Image or measurement?:Image
    Select the first image:PreDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ER
    Image or measurement?:Image
    Select the first image:PreER
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WGPhalloidin
    Image or measurement?:Image
    Select the first image:PreWGPhalloidin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Mito
    Image or measurement?:Image
    Select the first image:PreMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:RNA
    Image or measurement?:Image
    Select the first image:PreRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageQuality:[module_num:9|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:10|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:11|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../qc
    Rules file name:is_blurry_rules.txt
    Class number:2
    Ignore flag skips on last cycle?:No

EnhanceOrSuppressFeatures:[module_num:12|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enabled:False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
    Select the input image:DNA
    Name the output image:FilteredDNA
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast
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
CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:14|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:15|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notes:['Thereshold smoothing scale: 1.3488 —>3']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:7
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.014,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:16|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notes:['Lower bound: 0.002 —>0.005', 'Upper bound: ? —>0.025 (Plates BR00117000 and BR00117001)', 'For other plates maybe: upper: 0.015']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,0.014
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    Log transform before thresholding?:No
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
ImageMath:[module_num:17|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enabled:False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
    Operation:None
    Raise the power of the result by:0.01
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GrayToColor:[module_num:18|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:Mito
    Select the image to be colored green:DNA
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
IdentifyTertiaryObjects:[module_num:19|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:20|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
    Select the input image:DNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:21|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
    Select the input image:WGPhalloidin
    Name the output image:RescaleWGPhalloidin
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:22|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleDNA
    Select the image to be colored green:RescaleWGPhalloidin
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureColocalization:[module_num:25|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notes:['Have to Check -->Beth mentioned something']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enabled:False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
    Select images to measure:AGP, Brightfield, RNA, ER, DNA, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

MeasureGranularity:[module_num:26|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enabled:False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
    Select images to measure:AGP, Brightfield, RNA, ER, DNA, Mito
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:27|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enabled:False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
    Select images to measure:DNA, ER, RNA, AGP, Mito, Brightfield
    Select objects to measure:Nuclei, Cytoplasm, Cells

MeasureObjectNeighbors:[module_num:28|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:29|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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:30|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:31|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enabled:False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
    Select images to measure:AGP, Brightfield, RNA, ER, DNA, Mito
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:32|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enabled:False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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:33|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enabled:False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
    Select images to measure:AGP, Brightfield, RNA, ER, DNA, Mito
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

OverlayOutlines:[module_num:34|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:35|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:36|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:38|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:analysis_2016_20160623_a549_48hr_
    Output file location:Default Output Folder|Analysis
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:CellOutlines,NucleiOutlines,OrigER,OrigRNA,OrigDNA,OrigMito,OrigAGP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:7
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:analysis_2016_20160621_a549_48hr
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:Yes
    Select the classification type:Object
    Select an image to include:OrigDNA
    Use the image name for the display?:No
    Image name:DNA
    Channel color:red
    Select an image to include:OrigER
    Use the image name for the display?:No
    Image name:ER
    Channel color:green
    Select an image to include:OrigRNA
    Use the image name for the display?:No
    Image name:RNA
    Channel color:blue
    Select an image to include:OrigAGP
    Use the image name for the display?:No
    Image name:AGP
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Select an image to include:NucleiOutlines
    Use the image name for the display?:No
    Image name:Nuclei
    Channel color:none
    Select an image to include:CellOutlines
    Use the image name for the display?:No
    Image name:Cells
    Channel color:none
    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:39|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:40|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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